[[model]]
name: auxin_signalling_pathway
# Initial values
NAP.ARF_1           = 1
NAP.ARF_2           = 1
NAP.ARF_3           = 1
NAP.D__ARF_1__ARF_1 = 0.1
NAP.D__ARF_1__ARF_2 = 0.1
NAP.D__ARF_1__ARF_3 = 0.1
NAP.D__ARF_1__iaa_1 = 0.1
NAP.D__ARF_2__ARF_2 = 0.1
NAP.D__ARF_2__ARF_3 = 0.1
NAP.D__ARF_2__iaa_1 = 0.1
NAP.D__ARF_3__ARF_3 = 0.1
NAP.D__ARF_3__iaa_1 = 0.1
NAP.D__iaa_1__iaa_1 = 0.1
NAP.G__ARF_1        = 0
NAP.G__ARF_1__ARF_1 = 0
NAP.G__ARF_1__ARF_2 = 0
NAP.G__ARF_1__ARF_3 = 0
NAP.G__ARF_1__iaa_1 = 0
NAP.G__ARF_2        = 0
NAP.G__ARF_2__ARF_2 = 0
NAP.G__ARF_2__ARF_3 = 0
NAP.G__ARF_2__iaa_1 = 0
NAP.G__ARF_3        = 0
NAP.G__ARF_3__ARF_3 = 0
NAP.G__ARF_3__iaa_1 = 0
NAP.R__iaa_1        = 0.1
NAP.iaa_1           = 0.1

[NAP]
dot(ARF_1) = -2 * ARF_1^2 * k__D__ARF_1__ARF_1 - ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - ARF_1 * d__arf__all - ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 + 2 * D__ARF_1__ARF_1 * d__D__ARF_1__ARF_1 + D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2 + D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3 + D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1 + k__arf__all
dot(ARF_2) = -ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - 2 * ARF_2^2 * k__D__ARF_2__ARF_2 - ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - ARF_2 * d__arf__all - ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 + D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2 + 2 * D__ARF_2__ARF_2 * d__D__ARF_2__ARF_2 + D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3 + D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1 + k__arf__all
dot(ARF_3) = -ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - 2 * ARF_3^2 * k__D__ARF_3__ARF_3 - ARF_3 * d__arf__all - ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 + D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3 + D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3 + 2 * D__ARF_3__ARF_3 * d__D__ARF_3__ARF_3 + D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1 + k__arf__all
dot(D__ARF_1__ARF_1) = ARF_1^2 * k__D__ARF_1__ARF_1 - D__ARF_1__ARF_1 * d__D__ARF_1__ARF_1
dot(D__ARF_1__ARF_2) = ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2
dot(D__ARF_1__ARF_3) = ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3
dot(D__ARF_1__iaa_1) = ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 - D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1
dot(D__ARF_2__ARF_2) = ARF_2^2 * k__D__ARF_2__ARF_2 - D__ARF_2__ARF_2 * d__D__ARF_2__ARF_2
dot(D__ARF_2__ARF_3) = ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3
dot(D__ARF_2__iaa_1) = ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 - D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1
dot(D__ARF_3__ARF_3) = ARF_3^2 * k__D__ARF_3__ARF_3 - D__ARF_3__ARF_3 * d__D__ARF_3__ARF_3
dot(D__ARF_3__iaa_1) = ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 - D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1
dot(D__iaa_1__iaa_1) = -D__iaa_1__iaa_1 * d__D__iaa_1__iaa_1 + iaa_1^2 * k__D__iaa_1__iaa_1
G = -G__ARF_1 - G__ARF_1__ARF_1 - G__ARF_1__ARF_2 - G__ARF_1__ARF_3 - G__ARF_1__iaa_1 - G__ARF_2 - G__ARF_2__ARF_2 - G__ARF_2__ARF_3 - G__ARF_2__iaa_1 - G__ARF_3 - G__ARF_3__ARF_3 - G__ARF_3__iaa_1 + 1
dot(G__ARF_1) = ARF_1 * G * k__G__ARF_1 - ARF_1 * G__ARF_1 * k__G__ARF_1__bind__ARF_1 - ARF_2 * G__ARF_1 * k__G__ARF_1__bind__ARF_2 - ARF_3 * G__ARF_1 * k__G__ARF_1__bind__ARF_3 - G__ARF_1 * d__G__ARF_1 - G__ARF_1 * iaa_1 * k__G__ARF_1__bind__iaa_1 + G__ARF_1__ARF_1 * d__G__ARF_1__ARF_1__unbind__ARF_1 + G__ARF_1__ARF_2 * d__G__ARF_1__ARF_2__unbind__ARF_2 + G__ARF_1__ARF_3 * d__G__ARF_1__ARF_3__unbind__ARF_3 + G__ARF_1__iaa_1 * d__G__ARF_1__iaa_1__unbind__iaa_1
dot(G__ARF_1__ARF_1) = ARF_1 * G__ARF_1 * k__G__ARF_1__bind__ARF_1 + D__ARF_1__ARF_1 * G * k__G__ARF_1__ARF_1 - G__ARF_1__ARF_1 * d__G__ARF_1__ARF_1 - G__ARF_1__ARF_1 * d__G__ARF_1__ARF_1__unbind__ARF_1
dot(G__ARF_1__ARF_2) = ARF_1 * G__ARF_2 * k__G__ARF_2__bind__ARF_1 + ARF_2 * G__ARF_1 * k__G__ARF_1__bind__ARF_2 + D__ARF_1__ARF_2 * G * k__G__ARF_1__ARF_2 - G__ARF_1__ARF_2 * d__G__ARF_1__ARF_2 - G__ARF_1__ARF_2 * d__G__ARF_1__ARF_2__unbind__ARF_2 + G__ARF_2 * d__G__ARF_1__ARF_2__unbind__ARF_1
dot(G__ARF_1__ARF_3) = ARF_1 * G__ARF_3 * k__G__ARF_3__bind__ARF_1 + ARF_3 * G__ARF_1 * k__G__ARF_1__bind__ARF_3 + D__ARF_1__ARF_3 * G * k__G__ARF_1__ARF_3 - G__ARF_1__ARF_3 * d__G__ARF_1__ARF_3 - G__ARF_1__ARF_3 * d__G__ARF_1__ARF_3__unbind__ARF_3 + G__ARF_3 * d__G__ARF_1__ARF_3__unbind__ARF_1
dot(G__ARF_1__iaa_1) = D__ARF_1__iaa_1 * G * k__G__ARF_1__iaa_1 + G__ARF_1 * iaa_1 * k__G__ARF_1__bind__iaa_1 - G__ARF_1__iaa_1 * d__G__ARF_1__iaa_1 - G__ARF_1__iaa_1 * d__G__ARF_1__iaa_1__unbind__iaa_1
dot(G__ARF_2) = -ARF_1 * G__ARF_2 * k__G__ARF_2__bind__ARF_1 + ARF_2 * G * k__G__ARF_2 - ARF_2 * G__ARF_2 * k__G__ARF_2__bind__ARF_2 - ARF_3 * G__ARF_2 * k__G__ARF_2__bind__ARF_3 - G__ARF_2 * d__G__ARF_1__ARF_2__unbind__ARF_1 - G__ARF_2 * d__G__ARF_2 - G__ARF_2 * iaa_1 * k__G__ARF_2__bind__iaa_1 + G__ARF_2__ARF_2 * d__G__ARF_2__ARF_2__unbind__ARF_2 + G__ARF_2__ARF_3 * d__G__ARF_2__ARF_3__unbind__ARF_3 + G__ARF_2__iaa_1 * d__G__ARF_2__iaa_1__unbind__iaa_1
dot(G__ARF_2__ARF_2) = ARF_2 * G__ARF_2 * k__G__ARF_2__bind__ARF_2 + D__ARF_2__ARF_2 * G * k__G__ARF_2__ARF_2 - G__ARF_2__ARF_2 * d__G__ARF_2__ARF_2 - G__ARF_2__ARF_2 * d__G__ARF_2__ARF_2__unbind__ARF_2
dot(G__ARF_2__ARF_3) = ARF_2 * G__ARF_3 * k__G__ARF_3__bind__ARF_2 + ARF_3 * G__ARF_2 * k__G__ARF_2__bind__ARF_3 + D__ARF_2__ARF_3 * G * k__G__ARF_2__ARF_3 - G__ARF_2__ARF_3 * d__G__ARF_2__ARF_3 - G__ARF_2__ARF_3 * d__G__ARF_2__ARF_3__unbind__ARF_3 + G__ARF_3 * d__G__ARF_2__ARF_3__unbind__ARF_2
dot(G__ARF_2__iaa_1) = D__ARF_2__iaa_1 * G * k__G__ARF_2__iaa_1 + G__ARF_2 * iaa_1 * k__G__ARF_2__bind__iaa_1 - G__ARF_2__iaa_1 * d__G__ARF_2__iaa_1 - G__ARF_2__iaa_1 * d__G__ARF_2__iaa_1__unbind__iaa_1
dot(G__ARF_3) = -ARF_1 * G__ARF_3 * k__G__ARF_3__bind__ARF_1 - ARF_2 * G__ARF_3 * k__G__ARF_3__bind__ARF_2 + ARF_3 * G * k__G__ARF_3 - ARF_3 * G__ARF_3 * k__G__ARF_3__bind__ARF_3 - G__ARF_3 * d__G__ARF_1__ARF_3__unbind__ARF_1 - G__ARF_3 * d__G__ARF_2__ARF_3__unbind__ARF_2 - G__ARF_3 * d__G__ARF_3 - G__ARF_3 * iaa_1 * k__G__ARF_3__bind__iaa_1 + G__ARF_3__ARF_3 * d__G__ARF_3__ARF_3__unbind__ARF_3 + G__ARF_3__iaa_1 * d__G__ARF_3__iaa_1__unbind__iaa_1
dot(G__ARF_3__ARF_3) = ARF_3 * G__ARF_3 * k__G__ARF_3__bind__ARF_3 + D__ARF_3__ARF_3 * G * k__G__ARF_3__ARF_3 - G__ARF_3__ARF_3 * d__G__ARF_3__ARF_3 - G__ARF_3__ARF_3 * d__G__ARF_3__ARF_3__unbind__ARF_3
dot(G__ARF_3__iaa_1) = D__ARF_3__iaa_1 * G * k__G__ARF_3__iaa_1 + G__ARF_3 * iaa_1 * k__G__ARF_3__bind__iaa_1 - G__ARF_3__iaa_1 * d__G__ARF_3__iaa_1 - G__ARF_3__iaa_1 * d__G__ARF_3__iaa_1__unbind__iaa_1
dot(R__iaa_1) = G * k__G__R__iaa_1 + G__ARF_1 * k__G__ARF_1__R__iaa_1 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__iaa_1 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__iaa_1 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__iaa_1 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__iaa_1 + G__ARF_2 * k__G__ARF_2__R__iaa_1 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__iaa_1 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__iaa_1 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__iaa_1 + G__ARF_3 * k__G__ARF_3__R__iaa_1 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__iaa_1 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__iaa_1 - R__iaa_1 * d__R
d__D__ARF_1__ARF_1 = 0.1
d__D__ARF_1__ARF_2 = 0.1
d__D__ARF_1__ARF_3 = 0.1
d__D__ARF_1__iaa_1 = 0.1
d__D__ARF_2__ARF_2 = 0.1
d__D__ARF_2__ARF_3 = 0.1
d__D__ARF_2__iaa_1 = 0.1
d__D__ARF_3__ARF_3 = 0.1
d__D__ARF_3__iaa_1 = 0.1
d__D__iaa_1__iaa_1 = 0.1
d__G__ARF_1 = 1
d__G__ARF_1__ARF_1 = 1
d__G__ARF_1__ARF_1__unbind__ARF_1 = 0
d__G__ARF_1__ARF_2 = 1
d__G__ARF_1__ARF_2__unbind__ARF_1 = 0
d__G__ARF_1__ARF_2__unbind__ARF_2 = 0
d__G__ARF_1__ARF_3 = 1
d__G__ARF_1__ARF_3__unbind__ARF_1 = 0
d__G__ARF_1__ARF_3__unbind__ARF_3 = 0
d__G__ARF_1__iaa_1 = 1
d__G__ARF_1__iaa_1__unbind__iaa_1 = 0
d__G__ARF_2 = 1
d__G__ARF_2__ARF_2 = 1
d__G__ARF_2__ARF_2__unbind__ARF_2 = 0
d__G__ARF_2__ARF_3 = 1
d__G__ARF_2__ARF_3__unbind__ARF_2 = 0
d__G__ARF_2__ARF_3__unbind__ARF_3 = 0
d__G__ARF_2__iaa_1 = 1
d__G__ARF_2__iaa_1__unbind__iaa_1 = 0
d__G__ARF_3 = 1
d__G__ARF_3__ARF_3 = 1
d__G__ARF_3__ARF_3__unbind__ARF_3 = 0
d__G__ARF_3__iaa_1 = 1
d__G__ARF_3__iaa_1__unbind__iaa_1 = 0
d__R = 0.01
d__arf__all = 1
d__iaa_1__x = 0.1
d__iaa__all = 1
dot(iaa_1) = -ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 - ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 - ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 + D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1 + D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1 + D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1 + 2 * D__iaa_1__iaa_1 * d__D__iaa_1__iaa_1 + R__iaa_1 * k__R__iaa_1__iaa_1 - d__iaa_1__x * iaa_1 * x - d__iaa__all * iaa_1 - 2 * iaa_1^2 * k__D__iaa_1__iaa_1
k__D__ARF_1__ARF_1 = 0.001
k__D__ARF_1__ARF_2 = 0.001
k__D__ARF_1__ARF_3 = 0.001
k__D__ARF_1__iaa_1 = 0.001
k__D__ARF_2__ARF_2 = 0.001
k__D__ARF_2__ARF_3 = 0.001
k__D__ARF_2__iaa_1 = 0.001
k__D__ARF_3__ARF_3 = 0.001
k__D__ARF_3__iaa_1 = 0.001
k__D__iaa_1__iaa_1 = 0.001
k__G__ARF_1 = 1
k__G__ARF_1__ARF_1 = 1
k__G__ARF_1__ARF_1__R__iaa_1 = 1
k__G__ARF_1__ARF_2 = 1
k__G__ARF_1__ARF_2__R__iaa_1 = 1
k__G__ARF_1__ARF_3 = 1
k__G__ARF_1__ARF_3__R__iaa_1 = 1
k__G__ARF_1__R__iaa_1 = 1
k__G__ARF_1__bind__ARF_1 = 0
k__G__ARF_1__bind__ARF_2 = 0
k__G__ARF_1__bind__ARF_3 = 0
k__G__ARF_1__bind__iaa_1 = 0
k__G__ARF_1__iaa_1 = 1
k__G__ARF_1__iaa_1__R__iaa_1 = 1
k__G__ARF_2 = 1
k__G__ARF_2__ARF_2 = 1
k__G__ARF_2__ARF_2__R__iaa_1 = 1
k__G__ARF_2__ARF_3 = 1
k__G__ARF_2__ARF_3__R__iaa_1 = 1
k__G__ARF_2__R__iaa_1 = 1
k__G__ARF_2__bind__ARF_1 = 0
k__G__ARF_2__bind__ARF_2 = 0
k__G__ARF_2__bind__ARF_3 = 0
k__G__ARF_2__bind__iaa_1 = 0
k__G__ARF_2__iaa_1 = 1
k__G__ARF_2__iaa_1__R__iaa_1 = 1
k__G__ARF_3 = 1
k__G__ARF_3__ARF_3 = 1
k__G__ARF_3__ARF_3__R__iaa_1 = 1
k__G__ARF_3__R__iaa_1 = 1
k__G__ARF_3__bind__ARF_1 = 0
k__G__ARF_3__bind__ARF_2 = 0
k__G__ARF_3__bind__ARF_3 = 0
k__G__ARF_3__bind__iaa_1 = 0
k__G__ARF_3__iaa_1 = 1
k__G__ARF_3__iaa_1__R__iaa_1 = 1
k__G__R__iaa_1 = 1
k__R__iaa_1__iaa_1 = 0
k__arf__all = 1
x = 0 bind pace

[engine]
time = 0 bind time

