[[model]]
name: AuxinSignallingPathway
# Initial values
NAP.ARF_1           = 1
NAP.ARF_2           = 1
NAP.ARF_3           = 1
NAP.ARF_4           = 1
NAP.D__ARF_1__ARF_1 = 0.1
NAP.D__ARF_1__ARF_2 = 0.1
NAP.D__ARF_1__ARF_3 = 0.1
NAP.D__ARF_1__ARF_4 = 0.1
NAP.D__ARF_1__iaa_1 = 0.1
NAP.D__ARF_1__iaa_2 = 0.1
NAP.D__ARF_2__ARF_2 = 0.1
NAP.D__ARF_2__ARF_3 = 0.1
NAP.D__ARF_2__ARF_4 = 0.1
NAP.D__ARF_2__iaa_1 = 0.1
NAP.D__ARF_2__iaa_2 = 0.1
NAP.D__ARF_3__ARF_3 = 0.1
NAP.D__ARF_3__ARF_4 = 0.1
NAP.D__ARF_3__iaa_1 = 0.1
NAP.D__ARF_3__iaa_2 = 0.1
NAP.D__ARF_4__ARF_4 = 0.1
NAP.D__ARF_4__iaa_1 = 0.1
NAP.D__ARF_4__iaa_2 = 0.1
NAP.D__iaa_1__iaa_1 = 0.1
NAP.D__iaa_1__iaa_2 = 0.1
NAP.D__iaa_2__iaa_2 = 0.1
NAP.G__ARF_1        = 0
NAP.G__ARF_1__ARF_1 = 0
NAP.G__ARF_1__ARF_2 = 0
NAP.G__ARF_1__ARF_3 = 0
NAP.G__ARF_1__ARF_4 = 0
NAP.G__ARF_1__iaa_1 = 0
NAP.G__ARF_1__iaa_2 = 0
NAP.G__ARF_2        = 0
NAP.G__ARF_2__ARF_2 = 0
NAP.G__ARF_2__ARF_3 = 0
NAP.G__ARF_2__ARF_4 = 0
NAP.G__ARF_2__iaa_1 = 0
NAP.G__ARF_2__iaa_2 = 0
NAP.G__ARF_3        = 0
NAP.G__ARF_3__ARF_3 = 0
NAP.G__ARF_3__ARF_4 = 0
NAP.G__ARF_3__iaa_1 = 0
NAP.G__ARF_3__iaa_2 = 0
NAP.G__ARF_4        = 0
NAP.G__ARF_4__ARF_4 = 0
NAP.G__ARF_4__iaa_1 = 0
NAP.G__ARF_4__iaa_2 = 0
NAP.R__ARF_1        = 0
NAP.R__ARF_2        = 0
NAP.R__ARF_3        = 0
NAP.R__ARF_4        = 0
NAP.R__iaa_1        = 0
NAP.R__iaa_2        = 0
NAP.iaa_1           = 0.1
NAP.iaa_2           = 0.1

[NAP]
dot(ARF_1) = -2 * ARF_1^2 * k__D__ARF_1__ARF_1 - ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - ARF_1 * ARF_4 * k__D__ARF_1__ARF_4 - ARF_1 * d__arf__all - ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 - ARF_1 * iaa_2 * k__D__ARF_1__iaa_2 + 2 * D__ARF_1__ARF_1 * d__D__ARF_1__ARF_1 + D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2 + D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3 + D__ARF_1__ARF_4 * d__D__ARF_1__ARF_4 + D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1 + D__ARF_1__iaa_2 * d__D__ARF_1__iaa_2 + R__ARF_1 * k__R__ARF_1__ARF_1
dot(ARF_2) = -ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - 2 * ARF_2^2 * k__D__ARF_2__ARF_2 - ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - ARF_2 * ARF_4 * k__D__ARF_2__ARF_4 - ARF_2 * d__arf__all - ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 - ARF_2 * iaa_2 * k__D__ARF_2__iaa_2 + D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2 + 2 * D__ARF_2__ARF_2 * d__D__ARF_2__ARF_2 + D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3 + D__ARF_2__ARF_4 * d__D__ARF_2__ARF_4 + D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1 + D__ARF_2__iaa_2 * d__D__ARF_2__iaa_2 + R__ARF_2 * k__R__ARF_2__ARF_2
dot(ARF_3) = -ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - 2 * ARF_3^2 * k__D__ARF_3__ARF_3 - ARF_3 * ARF_4 * k__D__ARF_3__ARF_4 - ARF_3 * d__arf__all - ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 - ARF_3 * iaa_2 * k__D__ARF_3__iaa_2 + D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3 + D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3 + 2 * D__ARF_3__ARF_3 * d__D__ARF_3__ARF_3 + D__ARF_3__ARF_4 * d__D__ARF_3__ARF_4 + D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1 + D__ARF_3__iaa_2 * d__D__ARF_3__iaa_2 + R__ARF_3 * k__R__ARF_3__ARF_3
dot(ARF_4) = -ARF_1 * ARF_4 * k__D__ARF_1__ARF_4 - ARF_2 * ARF_4 * k__D__ARF_2__ARF_4 - ARF_3 * ARF_4 * k__D__ARF_3__ARF_4 - 2 * ARF_4^2 * k__D__ARF_4__ARF_4 - ARF_4 * d__arf__all - ARF_4 * iaa_1 * k__D__ARF_4__iaa_1 - ARF_4 * iaa_2 * k__D__ARF_4__iaa_2 + D__ARF_1__ARF_4 * d__D__ARF_1__ARF_4 + D__ARF_2__ARF_4 * d__D__ARF_2__ARF_4 + D__ARF_3__ARF_4 * d__D__ARF_3__ARF_4 + 2 * D__ARF_4__ARF_4 * d__D__ARF_4__ARF_4 + D__ARF_4__iaa_1 * d__D__ARF_4__iaa_1 + D__ARF_4__iaa_2 * d__D__ARF_4__iaa_2 + R__ARF_4 * k__R__ARF_4__ARF_4
dot(D__ARF_1__ARF_1) = ARF_1^2 * k__D__ARF_1__ARF_1 - D__ARF_1__ARF_1 * d__D__ARF_1__ARF_1
dot(D__ARF_1__ARF_2) = ARF_1 * ARF_2 * k__D__ARF_1__ARF_2 - D__ARF_1__ARF_2 * d__D__ARF_1__ARF_2
dot(D__ARF_1__ARF_3) = ARF_1 * ARF_3 * k__D__ARF_1__ARF_3 - D__ARF_1__ARF_3 * d__D__ARF_1__ARF_3
dot(D__ARF_1__ARF_4) = ARF_1 * ARF_4 * k__D__ARF_1__ARF_4 - D__ARF_1__ARF_4 * d__D__ARF_1__ARF_4
dot(D__ARF_1__iaa_1) = ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 - D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1
dot(D__ARF_1__iaa_2) = ARF_1 * iaa_2 * k__D__ARF_1__iaa_2 - D__ARF_1__iaa_2 * d__D__ARF_1__iaa_2
dot(D__ARF_2__ARF_2) = ARF_2^2 * k__D__ARF_2__ARF_2 - D__ARF_2__ARF_2 * d__D__ARF_2__ARF_2
dot(D__ARF_2__ARF_3) = ARF_2 * ARF_3 * k__D__ARF_2__ARF_3 - D__ARF_2__ARF_3 * d__D__ARF_2__ARF_3
dot(D__ARF_2__ARF_4) = ARF_2 * ARF_4 * k__D__ARF_2__ARF_4 - D__ARF_2__ARF_4 * d__D__ARF_2__ARF_4
dot(D__ARF_2__iaa_1) = ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 - D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1
dot(D__ARF_2__iaa_2) = ARF_2 * iaa_2 * k__D__ARF_2__iaa_2 - D__ARF_2__iaa_2 * d__D__ARF_2__iaa_2
dot(D__ARF_3__ARF_3) = ARF_3^2 * k__D__ARF_3__ARF_3 - D__ARF_3__ARF_3 * d__D__ARF_3__ARF_3
dot(D__ARF_3__ARF_4) = ARF_3 * ARF_4 * k__D__ARF_3__ARF_4 - D__ARF_3__ARF_4 * d__D__ARF_3__ARF_4
dot(D__ARF_3__iaa_1) = ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 - D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1
dot(D__ARF_3__iaa_2) = ARF_3 * iaa_2 * k__D__ARF_3__iaa_2 - D__ARF_3__iaa_2 * d__D__ARF_3__iaa_2
dot(D__ARF_4__ARF_4) = ARF_4^2 * k__D__ARF_4__ARF_4 - D__ARF_4__ARF_4 * d__D__ARF_4__ARF_4
dot(D__ARF_4__iaa_1) = ARF_4 * iaa_1 * k__D__ARF_4__iaa_1 - D__ARF_4__iaa_1 * d__D__ARF_4__iaa_1
dot(D__ARF_4__iaa_2) = ARF_4 * iaa_2 * k__D__ARF_4__iaa_2 - D__ARF_4__iaa_2 * d__D__ARF_4__iaa_2
dot(D__iaa_1__iaa_1) = -D__iaa_1__iaa_1 * d__D__iaa_1__iaa_1 + iaa_1^2 * k__D__iaa_1__iaa_1
dot(D__iaa_1__iaa_2) = -D__iaa_1__iaa_2 * d__D__iaa_1__iaa_2 + iaa_1 * iaa_2 * k__D__iaa_1__iaa_2
dot(D__iaa_2__iaa_2) = -D__iaa_2__iaa_2 * d__D__iaa_2__iaa_2 + iaa_2^2 * k__D__iaa_2__iaa_2
G = -G__ARF_1 - G__ARF_1__ARF_1 - G__ARF_1__ARF_2 - G__ARF_1__ARF_3 - G__ARF_1__ARF_4 - G__ARF_1__iaa_1 - G__ARF_1__iaa_2 - G__ARF_2 - G__ARF_2__ARF_2 - G__ARF_2__ARF_3 - G__ARF_2__ARF_4 - G__ARF_2__iaa_1 - G__ARF_2__iaa_2 - G__ARF_3 - G__ARF_3__ARF_3 - G__ARF_3__ARF_4 - G__ARF_3__iaa_1 - G__ARF_3__iaa_2 - G__ARF_4 - G__ARF_4__ARF_4 - G__ARF_4__iaa_1 - G__ARF_4__iaa_2 + 1
dot(G__ARF_1) = ARF_1 * G * k__G__ARF_1 - G__ARF_1 * d__G__ARF_1
dot(G__ARF_1__ARF_1) = D__ARF_1__ARF_1 * G * k__G__ARF_1__ARF_1 - G__ARF_1__ARF_1 * d__G__ARF_1__ARF_1
dot(G__ARF_1__ARF_2) = D__ARF_1__ARF_2 * G * k__G__ARF_1__ARF_2 - G__ARF_1__ARF_2 * d__G__ARF_1__ARF_2
dot(G__ARF_1__ARF_3) = D__ARF_1__ARF_3 * G * k__G__ARF_1__ARF_3 - G__ARF_1__ARF_3 * d__G__ARF_1__ARF_3
dot(G__ARF_1__ARF_4) = D__ARF_1__ARF_4 * G * k__G__ARF_1__ARF_4 - G__ARF_1__ARF_4 * d__G__ARF_1__ARF_4
dot(G__ARF_1__iaa_1) = D__ARF_1__iaa_1 * G * k__G__ARF_1__iaa_1 - G__ARF_1__iaa_1 * d__G__ARF_1__iaa_1
dot(G__ARF_1__iaa_2) = D__ARF_1__iaa_2 * G * k__G__ARF_1__iaa_2 - G__ARF_1__iaa_2 * d__G__ARF_1__iaa_2
dot(G__ARF_2) = ARF_2 * G * k__G__ARF_2 - G__ARF_2 * d__G__ARF_2
dot(G__ARF_2__ARF_2) = D__ARF_2__ARF_2 * G * k__G__ARF_2__ARF_2 - G__ARF_2__ARF_2 * d__G__ARF_2__ARF_2
dot(G__ARF_2__ARF_3) = D__ARF_2__ARF_3 * G * k__G__ARF_2__ARF_3 - G__ARF_2__ARF_3 * d__G__ARF_2__ARF_3
dot(G__ARF_2__ARF_4) = D__ARF_2__ARF_4 * G * k__G__ARF_2__ARF_4 - G__ARF_2__ARF_4 * d__G__ARF_2__ARF_4
dot(G__ARF_2__iaa_1) = D__ARF_2__iaa_1 * G * k__G__ARF_2__iaa_1 - G__ARF_2__iaa_1 * d__G__ARF_2__iaa_1
dot(G__ARF_2__iaa_2) = D__ARF_2__iaa_2 * G * k__G__ARF_2__iaa_2 - G__ARF_2__iaa_2 * d__G__ARF_2__iaa_2
dot(G__ARF_3) = ARF_3 * G * k__G__ARF_3 - G__ARF_3 * d__G__ARF_3
dot(G__ARF_3__ARF_3) = D__ARF_3__ARF_3 * G * k__G__ARF_3__ARF_3 - G__ARF_3__ARF_3 * d__G__ARF_3__ARF_3
dot(G__ARF_3__ARF_4) = D__ARF_3__ARF_4 * G * k__G__ARF_3__ARF_4 - G__ARF_3__ARF_4 * d__G__ARF_3__ARF_4
dot(G__ARF_3__iaa_1) = D__ARF_3__iaa_1 * G * k__G__ARF_3__iaa_1 - G__ARF_3__iaa_1 * d__G__ARF_3__iaa_1
dot(G__ARF_3__iaa_2) = D__ARF_3__iaa_2 * G * k__G__ARF_3__iaa_2 - G__ARF_3__iaa_2 * d__G__ARF_3__iaa_2
dot(G__ARF_4) = ARF_4 * G * k__G__ARF_4 - G__ARF_4 * d__G__ARF_4
dot(G__ARF_4__ARF_4) = D__ARF_4__ARF_4 * G * k__G__ARF_4__ARF_4 - G__ARF_4__ARF_4 * d__G__ARF_4__ARF_4
dot(G__ARF_4__iaa_1) = D__ARF_4__iaa_1 * G * k__G__ARF_4__iaa_1 - G__ARF_4__iaa_1 * d__G__ARF_4__iaa_1
dot(G__ARF_4__iaa_2) = D__ARF_4__iaa_2 * G * k__G__ARF_4__iaa_2 - G__ARF_4__iaa_2 * d__G__ARF_4__iaa_2
dot(R__ARF_1) = G * k__G__R__ARF_1 + G__ARF_1 * k__G__ARF_1__R__ARF_1 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__ARF_1 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__ARF_1 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__ARF_1 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__ARF_1 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__ARF_1 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__ARF_1 + G__ARF_2 * k__G__ARF_2__R__ARF_1 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__ARF_1 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__ARF_1 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__ARF_1 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__ARF_1 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__ARF_1 + G__ARF_3 * k__G__ARF_3__R__ARF_1 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__ARF_1 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__ARF_1 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__ARF_1 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__ARF_1 + G__ARF_4 * k__G__ARF_4__R__ARF_1 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__ARF_1 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__ARF_1 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__ARF_1 - R__ARF_1 * d__R
dot(R__ARF_2) = G * k__G__R__ARF_2 + G__ARF_1 * k__G__ARF_1__R__ARF_2 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__ARF_2 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__ARF_2 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__ARF_2 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__ARF_2 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__ARF_2 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__ARF_2 + G__ARF_2 * k__G__ARF_2__R__ARF_2 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__ARF_2 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__ARF_2 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__ARF_2 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__ARF_2 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__ARF_2 + G__ARF_3 * k__G__ARF_3__R__ARF_2 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__ARF_2 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__ARF_2 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__ARF_2 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__ARF_2 + G__ARF_4 * k__G__ARF_4__R__ARF_2 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__ARF_2 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__ARF_2 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__ARF_2 - R__ARF_2 * d__R
dot(R__ARF_3) = G * k__G__R__ARF_3 + G__ARF_1 * k__G__ARF_1__R__ARF_3 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__ARF_3 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__ARF_3 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__ARF_3 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__ARF_3 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__ARF_3 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__ARF_3 + G__ARF_2 * k__G__ARF_2__R__ARF_3 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__ARF_3 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__ARF_3 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__ARF_3 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__ARF_3 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__ARF_3 + G__ARF_3 * k__G__ARF_3__R__ARF_3 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__ARF_3 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__ARF_3 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__ARF_3 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__ARF_3 + G__ARF_4 * k__G__ARF_4__R__ARF_3 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__ARF_3 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__ARF_3 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__ARF_3 - R__ARF_3 * d__R
dot(R__ARF_4) = G * k__G__R__ARF_4 + G__ARF_1 * k__G__ARF_1__R__ARF_4 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__ARF_4 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__ARF_4 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__ARF_4 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__ARF_4 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__ARF_4 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__ARF_4 + G__ARF_2 * k__G__ARF_2__R__ARF_4 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__ARF_4 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__ARF_4 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__ARF_4 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__ARF_4 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__ARF_4 + G__ARF_3 * k__G__ARF_3__R__ARF_4 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__ARF_4 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__ARF_4 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__ARF_4 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__ARF_4 + G__ARF_4 * k__G__ARF_4__R__ARF_4 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__ARF_4 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__ARF_4 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__ARF_4 - R__ARF_4 * d__R
dot(R__iaa_1) = G * k__G__R__iaa_1 + G__ARF_1 * k__G__ARF_1__R__iaa_1 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__iaa_1 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__iaa_1 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__iaa_1 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__iaa_1 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__iaa_1 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__iaa_1 + G__ARF_2 * k__G__ARF_2__R__iaa_1 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__iaa_1 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__iaa_1 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__iaa_1 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__iaa_1 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__iaa_1 + G__ARF_3 * k__G__ARF_3__R__iaa_1 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__iaa_1 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__iaa_1 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__iaa_1 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__iaa_1 + G__ARF_4 * k__G__ARF_4__R__iaa_1 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__iaa_1 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__iaa_1 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__iaa_1 - R__iaa_1 * d__R
dot(R__iaa_2) = G * k__G__R__iaa_2 + G__ARF_1 * k__G__ARF_1__R__iaa_2 + G__ARF_1__ARF_1 * k__G__ARF_1__ARF_1__R__iaa_2 + G__ARF_1__ARF_2 * k__G__ARF_1__ARF_2__R__iaa_2 + G__ARF_1__ARF_3 * k__G__ARF_1__ARF_3__R__iaa_2 + G__ARF_1__ARF_4 * k__G__ARF_1__ARF_4__R__iaa_2 + G__ARF_1__iaa_1 * k__G__ARF_1__iaa_1__R__iaa_2 + G__ARF_1__iaa_2 * k__G__ARF_1__iaa_2__R__iaa_2 + G__ARF_2 * k__G__ARF_2__R__iaa_2 + G__ARF_2__ARF_2 * k__G__ARF_2__ARF_2__R__iaa_2 + G__ARF_2__ARF_3 * k__G__ARF_2__ARF_3__R__iaa_2 + G__ARF_2__ARF_4 * k__G__ARF_2__ARF_4__R__iaa_2 + G__ARF_2__iaa_1 * k__G__ARF_2__iaa_1__R__iaa_2 + G__ARF_2__iaa_2 * k__G__ARF_2__iaa_2__R__iaa_2 + G__ARF_3 * k__G__ARF_3__R__iaa_2 + G__ARF_3__ARF_3 * k__G__ARF_3__ARF_3__R__iaa_2 + G__ARF_3__ARF_4 * k__G__ARF_3__ARF_4__R__iaa_2 + G__ARF_3__iaa_1 * k__G__ARF_3__iaa_1__R__iaa_2 + G__ARF_3__iaa_2 * k__G__ARF_3__iaa_2__R__iaa_2 + G__ARF_4 * k__G__ARF_4__R__iaa_2 + G__ARF_4__ARF_4 * k__G__ARF_4__ARF_4__R__iaa_2 + G__ARF_4__iaa_1 * k__G__ARF_4__iaa_1__R__iaa_2 + G__ARF_4__iaa_2 * k__G__ARF_4__iaa_2__R__iaa_2 - R__iaa_2 * d__R
d__D__ARF_1__ARF_1 = 0.1
d__D__ARF_1__ARF_2 = 0.1
d__D__ARF_1__ARF_3 = 0.1
d__D__ARF_1__ARF_4 = 0.1
d__D__ARF_1__iaa_1 = 0.1
d__D__ARF_1__iaa_2 = 0.1
d__D__ARF_2__ARF_2 = 0.1
d__D__ARF_2__ARF_3 = 0.1
d__D__ARF_2__ARF_4 = 0.1
d__D__ARF_2__iaa_1 = 0.1
d__D__ARF_2__iaa_2 = 0.1
d__D__ARF_3__ARF_3 = 0.1
d__D__ARF_3__ARF_4 = 0.1
d__D__ARF_3__iaa_1 = 0.1
d__D__ARF_3__iaa_2 = 0.1
d__D__ARF_4__ARF_4 = 0.1
d__D__ARF_4__iaa_1 = 0.1
d__D__ARF_4__iaa_2 = 0.1
d__D__iaa_1__iaa_1 = 0.1
d__D__iaa_1__iaa_2 = 0.1
d__D__iaa_2__iaa_2 = 0.1
d__G__ARF_1 = 1
d__G__ARF_1__ARF_1 = 1
d__G__ARF_1__ARF_2 = 1
d__G__ARF_1__ARF_3 = 1
d__G__ARF_1__ARF_4 = 1
d__G__ARF_1__iaa_1 = 1
d__G__ARF_1__iaa_2 = 1
d__G__ARF_2 = 1
d__G__ARF_2__ARF_2 = 1
d__G__ARF_2__ARF_3 = 1
d__G__ARF_2__ARF_4 = 1
d__G__ARF_2__iaa_1 = 1
d__G__ARF_2__iaa_2 = 1
d__G__ARF_3 = 1
d__G__ARF_3__ARF_3 = 1
d__G__ARF_3__ARF_4 = 1
d__G__ARF_3__iaa_1 = 1
d__G__ARF_3__iaa_2 = 1
d__G__ARF_4 = 1
d__G__ARF_4__ARF_4 = 1
d__G__ARF_4__iaa_1 = 1
d__G__ARF_4__iaa_2 = 1
d__R = 0.01
d__arf__all = 1
d__iaa_1__x = 0.1
d__iaa_2__x = 0.1
d__iaa__all = 1
dot(iaa_1) = -ARF_1 * iaa_1 * k__D__ARF_1__iaa_1 - ARF_2 * iaa_1 * k__D__ARF_2__iaa_1 - ARF_3 * iaa_1 * k__D__ARF_3__iaa_1 - ARF_4 * iaa_1 * k__D__ARF_4__iaa_1 + D__ARF_1__iaa_1 * d__D__ARF_1__iaa_1 + D__ARF_2__iaa_1 * d__D__ARF_2__iaa_1 + D__ARF_3__iaa_1 * d__D__ARF_3__iaa_1 + D__ARF_4__iaa_1 * d__D__ARF_4__iaa_1 + 2 * D__iaa_1__iaa_1 * d__D__iaa_1__iaa_1 + D__iaa_1__iaa_2 * d__D__iaa_1__iaa_2 + R__iaa_1 * k__R__iaa_1__iaa_1 - d__iaa_1__x * iaa_1 * x - d__iaa__all * iaa_1 - 2 * iaa_1^2 * k__D__iaa_1__iaa_1 - iaa_1 * iaa_2 * k__D__iaa_1__iaa_2
dot(iaa_2) = -ARF_1 * iaa_2 * k__D__ARF_1__iaa_2 - ARF_2 * iaa_2 * k__D__ARF_2__iaa_2 - ARF_3 * iaa_2 * k__D__ARF_3__iaa_2 - ARF_4 * iaa_2 * k__D__ARF_4__iaa_2 + D__ARF_1__iaa_2 * d__D__ARF_1__iaa_2 + D__ARF_2__iaa_2 * d__D__ARF_2__iaa_2 + D__ARF_3__iaa_2 * d__D__ARF_3__iaa_2 + D__ARF_4__iaa_2 * d__D__ARF_4__iaa_2 + D__iaa_1__iaa_2 * d__D__iaa_1__iaa_2 + 2 * D__iaa_2__iaa_2 * d__D__iaa_2__iaa_2 + R__iaa_2 * k__R__iaa_2__iaa_2 - d__iaa_2__x * iaa_2 * x - d__iaa__all * iaa_2 - iaa_1 * iaa_2 * k__D__iaa_1__iaa_2 - 2 * iaa_2^2 * k__D__iaa_2__iaa_2
k__D__ARF_1__ARF_1 = 0.001
k__D__ARF_1__ARF_2 = 0.001
k__D__ARF_1__ARF_3 = 0.001
k__D__ARF_1__ARF_4 = 0.001
k__D__ARF_1__iaa_1 = 0.001
k__D__ARF_1__iaa_2 = 0.001
k__D__ARF_2__ARF_2 = 0.001
k__D__ARF_2__ARF_3 = 0.001
k__D__ARF_2__ARF_4 = 0.001
k__D__ARF_2__iaa_1 = 0.001
k__D__ARF_2__iaa_2 = 0.001
k__D__ARF_3__ARF_3 = 0.001
k__D__ARF_3__ARF_4 = 0.001
k__D__ARF_3__iaa_1 = 0.001
k__D__ARF_3__iaa_2 = 0.001
k__D__ARF_4__ARF_4 = 0.001
k__D__ARF_4__iaa_1 = 0.001
k__D__ARF_4__iaa_2 = 0.001
k__D__iaa_1__iaa_1 = 0.001
k__D__iaa_1__iaa_2 = 0.001
k__D__iaa_2__iaa_2 = 0.001
k__G__ARF_1 = 1
k__G__ARF_1__ARF_1 = 1
k__G__ARF_1__ARF_1__R__ARF_1 = 1
k__G__ARF_1__ARF_1__R__ARF_2 = 1
k__G__ARF_1__ARF_1__R__ARF_3 = 1
k__G__ARF_1__ARF_1__R__ARF_4 = 1
k__G__ARF_1__ARF_1__R__iaa_1 = 1
k__G__ARF_1__ARF_1__R__iaa_2 = 1
k__G__ARF_1__ARF_2 = 1
k__G__ARF_1__ARF_2__R__ARF_1 = 1
k__G__ARF_1__ARF_2__R__ARF_2 = 1
k__G__ARF_1__ARF_2__R__ARF_3 = 1
k__G__ARF_1__ARF_2__R__ARF_4 = 1
k__G__ARF_1__ARF_2__R__iaa_1 = 1
k__G__ARF_1__ARF_2__R__iaa_2 = 1
k__G__ARF_1__ARF_3 = 1
k__G__ARF_1__ARF_3__R__ARF_1 = 1
k__G__ARF_1__ARF_3__R__ARF_2 = 1
k__G__ARF_1__ARF_3__R__ARF_3 = 1
k__G__ARF_1__ARF_3__R__ARF_4 = 1
k__G__ARF_1__ARF_3__R__iaa_1 = 1
k__G__ARF_1__ARF_3__R__iaa_2 = 1
k__G__ARF_1__ARF_4 = 1
k__G__ARF_1__ARF_4__R__ARF_1 = 1
k__G__ARF_1__ARF_4__R__ARF_2 = 1
k__G__ARF_1__ARF_4__R__ARF_3 = 1
k__G__ARF_1__ARF_4__R__ARF_4 = 1
k__G__ARF_1__ARF_4__R__iaa_1 = 1
k__G__ARF_1__ARF_4__R__iaa_2 = 1
k__G__ARF_1__R__ARF_1 = 1
k__G__ARF_1__R__ARF_2 = 1
k__G__ARF_1__R__ARF_3 = 1
k__G__ARF_1__R__ARF_4 = 1
k__G__ARF_1__R__iaa_1 = 1
k__G__ARF_1__R__iaa_2 = 1
k__G__ARF_1__iaa_1 = 1
k__G__ARF_1__iaa_1__R__ARF_1 = 1
k__G__ARF_1__iaa_1__R__ARF_2 = 1
k__G__ARF_1__iaa_1__R__ARF_3 = 1
k__G__ARF_1__iaa_1__R__ARF_4 = 1
k__G__ARF_1__iaa_1__R__iaa_1 = 1
k__G__ARF_1__iaa_1__R__iaa_2 = 1
k__G__ARF_1__iaa_2 = 1
k__G__ARF_1__iaa_2__R__ARF_1 = 1
k__G__ARF_1__iaa_2__R__ARF_2 = 1
k__G__ARF_1__iaa_2__R__ARF_3 = 1
k__G__ARF_1__iaa_2__R__ARF_4 = 1
k__G__ARF_1__iaa_2__R__iaa_1 = 1
k__G__ARF_1__iaa_2__R__iaa_2 = 1
k__G__ARF_2 = 1
k__G__ARF_2__ARF_2 = 1
k__G__ARF_2__ARF_2__R__ARF_1 = 1
k__G__ARF_2__ARF_2__R__ARF_2 = 1
k__G__ARF_2__ARF_2__R__ARF_3 = 1
k__G__ARF_2__ARF_2__R__ARF_4 = 1
k__G__ARF_2__ARF_2__R__iaa_1 = 1
k__G__ARF_2__ARF_2__R__iaa_2 = 1
k__G__ARF_2__ARF_3 = 1
k__G__ARF_2__ARF_3__R__ARF_1 = 1
k__G__ARF_2__ARF_3__R__ARF_2 = 1
k__G__ARF_2__ARF_3__R__ARF_3 = 1
k__G__ARF_2__ARF_3__R__ARF_4 = 1
k__G__ARF_2__ARF_3__R__iaa_1 = 1
k__G__ARF_2__ARF_3__R__iaa_2 = 1
k__G__ARF_2__ARF_4 = 1
k__G__ARF_2__ARF_4__R__ARF_1 = 1
k__G__ARF_2__ARF_4__R__ARF_2 = 1
k__G__ARF_2__ARF_4__R__ARF_3 = 1
k__G__ARF_2__ARF_4__R__ARF_4 = 1
k__G__ARF_2__ARF_4__R__iaa_1 = 1
k__G__ARF_2__ARF_4__R__iaa_2 = 1
k__G__ARF_2__R__ARF_1 = 1
k__G__ARF_2__R__ARF_2 = 1
k__G__ARF_2__R__ARF_3 = 1
k__G__ARF_2__R__ARF_4 = 1
k__G__ARF_2__R__iaa_1 = 1
k__G__ARF_2__R__iaa_2 = 1
k__G__ARF_2__iaa_1 = 1
k__G__ARF_2__iaa_1__R__ARF_1 = 1
k__G__ARF_2__iaa_1__R__ARF_2 = 1
k__G__ARF_2__iaa_1__R__ARF_3 = 1
k__G__ARF_2__iaa_1__R__ARF_4 = 1
k__G__ARF_2__iaa_1__R__iaa_1 = 1
k__G__ARF_2__iaa_1__R__iaa_2 = 1
k__G__ARF_2__iaa_2 = 1
k__G__ARF_2__iaa_2__R__ARF_1 = 1
k__G__ARF_2__iaa_2__R__ARF_2 = 1
k__G__ARF_2__iaa_2__R__ARF_3 = 1
k__G__ARF_2__iaa_2__R__ARF_4 = 1
k__G__ARF_2__iaa_2__R__iaa_1 = 1
k__G__ARF_2__iaa_2__R__iaa_2 = 1
k__G__ARF_3 = 1
k__G__ARF_3__ARF_3 = 1
k__G__ARF_3__ARF_3__R__ARF_1 = 1
k__G__ARF_3__ARF_3__R__ARF_2 = 1
k__G__ARF_3__ARF_3__R__ARF_3 = 1
k__G__ARF_3__ARF_3__R__ARF_4 = 1
k__G__ARF_3__ARF_3__R__iaa_1 = 1
k__G__ARF_3__ARF_3__R__iaa_2 = 1
k__G__ARF_3__ARF_4 = 1
k__G__ARF_3__ARF_4__R__ARF_1 = 1
k__G__ARF_3__ARF_4__R__ARF_2 = 1
k__G__ARF_3__ARF_4__R__ARF_3 = 1
k__G__ARF_3__ARF_4__R__ARF_4 = 1
k__G__ARF_3__ARF_4__R__iaa_1 = 1
k__G__ARF_3__ARF_4__R__iaa_2 = 1
k__G__ARF_3__R__ARF_1 = 1
k__G__ARF_3__R__ARF_2 = 1
k__G__ARF_3__R__ARF_3 = 1
k__G__ARF_3__R__ARF_4 = 1
k__G__ARF_3__R__iaa_1 = 1
k__G__ARF_3__R__iaa_2 = 1
k__G__ARF_3__iaa_1 = 1
k__G__ARF_3__iaa_1__R__ARF_1 = 1
k__G__ARF_3__iaa_1__R__ARF_2 = 1
k__G__ARF_3__iaa_1__R__ARF_3 = 1
k__G__ARF_3__iaa_1__R__ARF_4 = 1
k__G__ARF_3__iaa_1__R__iaa_1 = 1
k__G__ARF_3__iaa_1__R__iaa_2 = 1
k__G__ARF_3__iaa_2 = 1
k__G__ARF_3__iaa_2__R__ARF_1 = 1
k__G__ARF_3__iaa_2__R__ARF_2 = 1
k__G__ARF_3__iaa_2__R__ARF_3 = 1
k__G__ARF_3__iaa_2__R__ARF_4 = 1
k__G__ARF_3__iaa_2__R__iaa_1 = 1
k__G__ARF_3__iaa_2__R__iaa_2 = 1
k__G__ARF_4 = 1
k__G__ARF_4__ARF_4 = 1
k__G__ARF_4__ARF_4__R__ARF_1 = 1
k__G__ARF_4__ARF_4__R__ARF_2 = 1
k__G__ARF_4__ARF_4__R__ARF_3 = 1
k__G__ARF_4__ARF_4__R__ARF_4 = 1
k__G__ARF_4__ARF_4__R__iaa_1 = 1
k__G__ARF_4__ARF_4__R__iaa_2 = 1
k__G__ARF_4__R__ARF_1 = 1
k__G__ARF_4__R__ARF_2 = 1
k__G__ARF_4__R__ARF_3 = 1
k__G__ARF_4__R__ARF_4 = 1
k__G__ARF_4__R__iaa_1 = 1
k__G__ARF_4__R__iaa_2 = 1
k__G__ARF_4__iaa_1 = 1
k__G__ARF_4__iaa_1__R__ARF_1 = 1
k__G__ARF_4__iaa_1__R__ARF_2 = 1
k__G__ARF_4__iaa_1__R__ARF_3 = 1
k__G__ARF_4__iaa_1__R__ARF_4 = 1
k__G__ARF_4__iaa_1__R__iaa_1 = 1
k__G__ARF_4__iaa_1__R__iaa_2 = 1
k__G__ARF_4__iaa_2 = 1
k__G__ARF_4__iaa_2__R__ARF_1 = 1
k__G__ARF_4__iaa_2__R__ARF_2 = 1
k__G__ARF_4__iaa_2__R__ARF_3 = 1
k__G__ARF_4__iaa_2__R__ARF_4 = 1
k__G__ARF_4__iaa_2__R__iaa_1 = 1
k__G__ARF_4__iaa_2__R__iaa_2 = 1
k__G__R__ARF_1 = 1
k__G__R__ARF_2 = 1
k__G__R__ARF_3 = 1
k__G__R__ARF_4 = 1
k__G__R__iaa_1 = 1
k__G__R__iaa_2 = 1
k__R__ARF_1__ARF_1 = 1
k__R__ARF_2__ARF_2 = 1
k__R__ARF_3__ARF_3 = 1
k__R__ARF_4__ARF_4 = 1
k__R__iaa_1__iaa_1 = 1
k__R__iaa_2__iaa_2 = 1
x = 0 bind pace

[engine]
time = 0 bind time

